<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message" xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension" SequenceId="1">
    <msg:Mdib MdibVersion="1" SequenceId="1">
        <pm:MdDescription DescriptionVersion="1">
            <pm:Mds Handle="mds_1">
                <pm:SystemContext Handle="sys_context_1">
                    <pm:PatientContext xsi:type="pm:PatientContextDescriptor" Handle="pat_context_descriptor" />
                    <pm:LocationContext xsi:type="pm:LocationContextDescriptor" Handle="loc_context_descriptor" />
                    <pm:EnsembleContext Handle="ens_context_1" />
                </pm:SystemContext>
                <pm:Clock Handle="clock">
                    <pm:TimeProtocol Code="532225">
                        <pm:ConceptDescription Lang="en-us">NTPv4</pm:ConceptDescription>
                    </pm:TimeProtocol>
                </pm:Clock>

                <pm:Vmd Handle="vmd_1">
                    <!-- Alert System -->
                    <pm:AlertSystem xsi:type="pm:AlertSystemDescriptor" Handle="al_system_1">
                        <pm:AlertCondition xsi:type="pm:AlertConditionDescriptor" Handle="al_condition_1" Kind="Phy" Priority="None">
                            <pm:Source>cpu_temp</pm:Source>
                        </pm:AlertCondition>
                        <pm:AlertSignal xsi:type="pm:AlertSignalDescriptor" Handle="al_signal_1" ConditionSignaled="al_condition_1"
                                        Manifestation="Aud" SignalDelegationSupported="true" Latching="true">
                        </pm:AlertSignal>
                    </pm:AlertSystem>
                    <!-- Operations to enable remote control  -->
                    <pm:Sco Handle="sco_1">
                        <pm:Operation xsi:type="pm:SetValueOperationDescriptor" Handle="threshold_control" OperationTarget="temp_threshold" />
                        <pm:Operation xsi:type="pm:SetStringOperationDescriptor" Handle="fan_control" OperationTarget="fan_rotation"></pm:Operation>
                        <pm:Operation xsi:type="pm:SetAlertStateOperationDescriptor" Handle="alert_control" OperationTarget="al_signal_1" Retriggerable="true">
                            <pm:ModifiableData>Presence</pm:ModifiableData>
                            <pm:ModifiableData>ActivationState</pm:ModifiableData>
                            <pm:ModifiableData>ActualSignalGenerationDelay</pm:ModifiableData>
                        </pm:Operation>
                        <pm:Operation xsi:type="pm:SetComponentStateOperationDescriptor"  Handle="metric_op" OperationTarget="cpu_temp"></pm:Operation>
                    </pm:Sco>

                    <!-- Separate channels for various types of metrics   -->
                    <!-- Channel for CPU Information   -->
                    <pm:Channel Handle="cpu_temp_channel">
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="cpu_temp" MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="celsius"></pm:Unit>
                        </pm:Metric>
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="temp_threshold" MetricCategory="Set" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="celsius"></pm:Unit>
                        </pm:Metric>
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="device_id" MetricCategory="Set" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="id"></pm:Unit>
                        </pm:Metric>
                    </pm:Channel>
                    <!-- Channel for Fan Control -->
                    <pm:Channel Handle="fan_channel">
                        <pm:Metric xsi:type="pm:EnumStringMetricDescriptor" Handle="fan_rotation" MetricCategory="Set" MetricAvailability="Intr">
                            <pm:Unit Code="enum"></pm:Unit>
                            <pm:AllowedValue>
                                <pm:Value>On</pm:Value>
                            </pm:AllowedValue>
                            <pm:AllowedValue>
                                <pm:Value>Off</pm:Value>
                            </pm:AllowedValue>
                        </pm:Metric>
                    </pm:Channel>
                    <pm:Channel Handle="sense-hat_channel">
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="sense-hat_metric" MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="code"></pm:Unit>
                        </pm:Metric>
                    </pm:Channel>
                </pm:Vmd>
            </pm:Mds>
        </pm:MdDescription>

        <pm:MdState>
            <pm:State xsi:type="pm:PatientContextState" DescriptorHandle= "pat_context_descriptor" Handle="pat_context_state">
                <pm:CoreData>
                    <pm:Birthname>Bebra</pm:Birthname>
                </pm:CoreData>
            </pm:State>
            <pm:State xsi:type="pm:LocationContextState" DescriptorHandle= "loc_context_descriptor" Handle="loc_context_state">
                <pm:LocationDetail Bed="101"/>
            </pm:State>

            <pm:State xsi:type="pm:AlertSystemState"  DescriptorHandle="al_system_1" ActivationState="On" />
            <pm:State xsi:type="pm:AlertConditionState" DescriptorHandle="al_condition_1" ActivationState="On" Presence="false" />
            <pm:State xsi:type="pm:AlertSignalState" DescriptorHandle="al_signal_1" ActivationState="Off" Presence="Off" />

            <pm:State xsi:type="pm:SetStringOperationState" DescriptorHandle="fan_control" OperatingMode="En" />
            <pm:State xsi:type="pm:SetAlertStateOperationState" DescriptorHandle="alert_control" OperatingMode="En" />
            <pm:State xsi:type="pm:SetValueOperationState" DescriptorHandle="threshold_control" OperatingMode="En" />

            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="cpu_temp">
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="temp_threshold">
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:EnumStringMetricState" DescriptorHandle="fan_rotation">
                <pm:MetricValue Value="Off">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="sense-hat_metric" >
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="device_id">
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
        </pm:MdState>
    </msg:Mdib>
</msg:GetMdibResponse>